# Generated by Configurator on Sat Jan 09 20:24:26 CET 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1 
Device,COM6,SerialManager,COM6
Device,NikonTi,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,SpectraX,LumencorSpectra,Spectra
Device,Hamamatsu_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,ArduinoDIA-Hub,Arduino,Arduino-Hub
Device,ArduinoDIA-Switch,Arduino,Arduino-Switch
Device,Arduino (DIA),Arduino,Arduino-Shutter
Device,ArduinoSpectraX-Hub,Arduino,Arduino-Hub
Device,ArduinoSpectraX-Switch,Arduino,Arduino-Switch
Device,SpectraX (Arduino),Arduino,Arduino-Shutter
Device,ArduinoDIA-Input,Arduino,Arduino-Input

# Pre-init settings for devices
Property,SpectraX,Port,COM1
Property,SpectraX,SetLE_Type,SpectraX
Property,ArduinoDIA-Hub,Logic,Normal
Property,ArduinoDIA-Hub,Port,COM6
Property,ArduinoSpectraX-Hub,Logic,Inverted
Property,ArduinoSpectraX-Hub,Port,COM5
Property,ArduinoDIA-Input,Pin,All
Property,ArduinoDIA-Input,Pull-Up-Resistor,On

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,0
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,57600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0

# Hub (parent) references
Parent,TINosePiece,NikonTi
Parent,TICondenserCassette,NikonTi
Parent,TIFilterBlock1,NikonTi
Parent,TILightPath,NikonTi
Parent,TIZDrive,NikonTi
Parent,TIXYDrive,NikonTi
Parent,TIPFSOffset,NikonTi
Parent,TIPFSStatus,NikonTi
Parent,ArduinoDIA-Switch,ArduinoDIA-Hub
Parent,Arduino (DIA),ArduinoDIA-Hub
Parent,ArduinoSpectraX-Switch,ArduinoSpectraX-Hub
Parent,SpectraX (Arduino),ArduinoSpectraX-Hub
Parent,ArduinoDIA-Input,ArduinoDIA-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,250.0
Delay,TICondenserCassette,250.0
Delay,TIFilterBlock1,250.0
Delay,TILightPath,250.0

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,Hamamatsu_DCAM
Property,Core,Shutter,Arduino (DIA)
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Unknown
Label,TINosePiece,2,3-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,1,2-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5------
Label,TICondenserCassette,3,4-MC1
Label,TICondenserCassette,2,3-Ph3
Label,TICondenserCassette,1,2-Ph1
Label,TICondenserCassette,0,1------
# TIFilterBlock1
Label,TIFilterBlock1,5,6-Cy55
Label,TIFilterBlock1,4,5-mChe
Label,TIFilterBlock1,3,4-RFP
Label,TIFilterBlock1,2,3-GFP
Label,TIFilterBlock1,1,2-CFP
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# ArduinoDIA-Switch
Label,ArduinoDIA-Switch,63,63
Label,ArduinoDIA-Switch,62,62
Label,ArduinoDIA-Switch,61,61
Label,ArduinoDIA-Switch,60,60
Label,ArduinoDIA-Switch,59,59
Label,ArduinoDIA-Switch,58,58
Label,ArduinoDIA-Switch,57,57
Label,ArduinoDIA-Switch,56,56
Label,ArduinoDIA-Switch,55,55
Label,ArduinoDIA-Switch,54,54
Label,ArduinoDIA-Switch,53,53
Label,ArduinoDIA-Switch,52,52
Label,ArduinoDIA-Switch,51,51
Label,ArduinoDIA-Switch,50,50
Label,ArduinoDIA-Switch,49,49
Label,ArduinoDIA-Switch,48,48
Label,ArduinoDIA-Switch,47,47
Label,ArduinoDIA-Switch,46,46
Label,ArduinoDIA-Switch,45,45
Label,ArduinoDIA-Switch,44,44
Label,ArduinoDIA-Switch,43,43
Label,ArduinoDIA-Switch,42,42
Label,ArduinoDIA-Switch,41,41
Label,ArduinoDIA-Switch,40,40
Label,ArduinoDIA-Switch,39,39
Label,ArduinoDIA-Switch,38,38
Label,ArduinoDIA-Switch,37,37
Label,ArduinoDIA-Switch,36,36
Label,ArduinoDIA-Switch,35,35
Label,ArduinoDIA-Switch,34,34
Label,ArduinoDIA-Switch,33,33
Label,ArduinoDIA-Switch,32,32
Label,ArduinoDIA-Switch,31,31
Label,ArduinoDIA-Switch,30,30
Label,ArduinoDIA-Switch,29,29
Label,ArduinoDIA-Switch,28,28
Label,ArduinoDIA-Switch,27,27
Label,ArduinoDIA-Switch,26,26
Label,ArduinoDIA-Switch,25,25
Label,ArduinoDIA-Switch,24,24
Label,ArduinoDIA-Switch,23,23
Label,ArduinoDIA-Switch,22,22
Label,ArduinoDIA-Switch,21,21
Label,ArduinoDIA-Switch,20,20
Label,ArduinoDIA-Switch,19,19
Label,ArduinoDIA-Switch,18,18
Label,ArduinoDIA-Switch,17,17
Label,ArduinoDIA-Switch,16,16
Label,ArduinoDIA-Switch,15,15
Label,ArduinoDIA-Switch,14,14
Label,ArduinoDIA-Switch,13,13
Label,ArduinoDIA-Switch,12,12
Label,ArduinoDIA-Switch,11,11
Label,ArduinoDIA-Switch,10,10
Label,ArduinoDIA-Switch,9,9
Label,ArduinoDIA-Switch,8,8
Label,ArduinoDIA-Switch,7,7
Label,ArduinoDIA-Switch,6,6
Label,ArduinoDIA-Switch,5,5
Label,ArduinoDIA-Switch,4,4
Label,ArduinoDIA-Switch,3,3
Label,ArduinoDIA-Switch,2,2
Label,ArduinoDIA-Switch,1,1
Label,ArduinoDIA-Switch,0,0
# ArduinoSpectraX-Switch
Label,ArduinoSpectraX-Switch,63,63
Label,ArduinoSpectraX-Switch,62,62
Label,ArduinoSpectraX-Switch,61,61
Label,ArduinoSpectraX-Switch,60,60
Label,ArduinoSpectraX-Switch,59,59
Label,ArduinoSpectraX-Switch,58,58
Label,ArduinoSpectraX-Switch,57,57
Label,ArduinoSpectraX-Switch,56,56
Label,ArduinoSpectraX-Switch,55,55
Label,ArduinoSpectraX-Switch,54,54
Label,ArduinoSpectraX-Switch,53,53
Label,ArduinoSpectraX-Switch,52,52
Label,ArduinoSpectraX-Switch,51,51
Label,ArduinoSpectraX-Switch,50,50
Label,ArduinoSpectraX-Switch,49,49
Label,ArduinoSpectraX-Switch,48,48
Label,ArduinoSpectraX-Switch,47,47
Label,ArduinoSpectraX-Switch,46,46
Label,ArduinoSpectraX-Switch,45,45
Label,ArduinoSpectraX-Switch,44,44
Label,ArduinoSpectraX-Switch,43,43
Label,ArduinoSpectraX-Switch,42,42
Label,ArduinoSpectraX-Switch,41,41
Label,ArduinoSpectraX-Switch,40,40
Label,ArduinoSpectraX-Switch,39,39
Label,ArduinoSpectraX-Switch,38,38
Label,ArduinoSpectraX-Switch,37,37
Label,ArduinoSpectraX-Switch,36,36
Label,ArduinoSpectraX-Switch,35,35
Label,ArduinoSpectraX-Switch,34,34
Label,ArduinoSpectraX-Switch,33,33
Label,ArduinoSpectraX-Switch,32,32
Label,ArduinoSpectraX-Switch,31,31
Label,ArduinoSpectraX-Switch,30,30
Label,ArduinoSpectraX-Switch,29,29
Label,ArduinoSpectraX-Switch,28,28
Label,ArduinoSpectraX-Switch,27,27
Label,ArduinoSpectraX-Switch,26,26
Label,ArduinoSpectraX-Switch,25,25
Label,ArduinoSpectraX-Switch,24,24
Label,ArduinoSpectraX-Switch,23,23
Label,ArduinoSpectraX-Switch,22,22
Label,ArduinoSpectraX-Switch,21,21
Label,ArduinoSpectraX-Switch,20,20
Label,ArduinoSpectraX-Switch,19,19
Label,ArduinoSpectraX-Switch,18,18
Label,ArduinoSpectraX-Switch,17,17
Label,ArduinoSpectraX-Switch,16,16
Label,ArduinoSpectraX-Switch,15,15
Label,ArduinoSpectraX-Switch,14,14
Label,ArduinoSpectraX-Switch,13,13
Label,ArduinoSpectraX-Switch,12,12
Label,ArduinoSpectraX-Switch,11,11
Label,ArduinoSpectraX-Switch,10,10
Label,ArduinoSpectraX-Switch,9,9
Label,ArduinoSpectraX-Switch,8,8
Label,ArduinoSpectraX-Switch,7,7
Label,ArduinoSpectraX-Switch,6,6
Label,ArduinoSpectraX-Switch,5,5
Label,ArduinoSpectraX-Switch,4,4
Label,ArduinoSpectraX-Switch,3,3
Label,ArduinoSpectraX-Switch,2,2
Label,ArduinoSpectraX-Switch,1,1
Label,ArduinoSpectraX-Switch,0,0

# Configuration presets
# Group: a2
# Preset: NewPreset
ConfigGroup,a2,NewPreset,ArduinoDIA-Input,AnalogInput2,1023.0000


# Group: a1
# Preset: NewPreset
ConfigGroup,a1,NewPreset,ArduinoDIA-Input,AnalogInput1,1023.0000


# Group: Camera Cooling
# Preset: ON
ConfigGroup,Camera Cooling,ON,Hamamatsu_DCAM,Sensor Cooler,ON

# Preset: OFF
ConfigGroup,Camera Cooling,OFF,Hamamatsu_DCAM,Sensor Cooler,OFF

# Preset: MAX
ConfigGroup,Camera Cooling,MAX,Hamamatsu_DCAM,Sensor Cooler,MAX


# Group: PFS Offset
# Preset: NewPreset
ConfigGroup,PFS Offset,NewPreset,TIPFSOffset,Position,164.5250


# Group: a0
# Preset: NewPreset
ConfigGroup,a0,NewPreset,ArduinoDIA-Input,AnalogInput0,1023.0000


# Group: Channel

# Group:  Illumination
# Preset: Cy5.5 97%
ConfigGroup, Illumination,Cy5.5 97%,TIFilterBlock1,Label,6-Cy55
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Cyan_Level,100
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Green_Level,100
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Red_Enable,1
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Red_Level,97
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,State,0
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,Cy5.5 97%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,Cy5.5 97%,Core,AutoShutter,1
ConfigGroup, Illumination,Cy5.5 97%,Core,Shutter,SpectraX

# Preset: CFP  9%
ConfigGroup, Illumination,CFP  9%,TIFilterBlock1,Label,2-CFP
ConfigGroup, Illumination,CFP  9%,SpectraX,Blue_Enable,1
ConfigGroup, Illumination,CFP  9%,SpectraX,Blue_Level,9
ConfigGroup, Illumination,CFP  9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Green_Level,100
ConfigGroup, Illumination,CFP  9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,CFP  9%,SpectraX,State,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,CFP  9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,CFP  9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,CFP  9%,Core,AutoShutter,1
ConfigGroup, Illumination,CFP  9%,Core,Shutter,SpectraX

# Preset: RFP  9%
ConfigGroup, Illumination,RFP  9%,TIFilterBlock1,Label,4-RFP
ConfigGroup, Illumination,RFP  9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,RFP  9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,RFP  9%,SpectraX,Green_Level,9
ConfigGroup, Illumination,RFP  9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,RFP  9%,SpectraX,State,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,RFP  9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,RFP  9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,RFP  9%,Core,AutoShutter,1
ConfigGroup, Illumination,RFP  9%,Core,Shutter,SpectraX

# Preset: YFP  9%
ConfigGroup, Illumination,YFP  9%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,YFP  9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,YFP  9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Green_Level,100
ConfigGroup, Illumination,YFP  9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,YFP  9%,SpectraX,State,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Teal_Enable,1
ConfigGroup, Illumination,YFP  9%,SpectraX,Teal_Level,9
ConfigGroup, Illumination,YFP  9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,YFP  9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,YFP  9%,Core,AutoShutter,1
ConfigGroup, Illumination,YFP  9%,Core,Shutter,SpectraX

# Preset: RFP 49%
ConfigGroup, Illumination,RFP 49%,TIFilterBlock1,Label,4-RFP
ConfigGroup, Illumination,RFP 49%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,RFP 49%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,RFP 49%,SpectraX,Green_Level,49
ConfigGroup, Illumination,RFP 49%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Red_Level,100
ConfigGroup, Illumination,RFP 49%,SpectraX,State,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,RFP 49%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,RFP 49%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,RFP 49%,Core,AutoShutter,1
ConfigGroup, Illumination,RFP 49%,Core,Shutter,SpectraX

# Preset: mCherry  3%
ConfigGroup, Illumination,mCherry  3%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry  3%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry  3%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry  3%,SpectraX,Green_Level,3
ConfigGroup, Illumination,mCherry  3%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry  3%,SpectraX,State,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry  3%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry  3%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry  3%,Core,Shutter,SpectraX
ConfigGroup, Illumination,mCherry  3%,Core,AutoShutter,1

# Preset: mCherry  9%
ConfigGroup, Illumination,mCherry  9%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry  9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry  9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry  9%,SpectraX,Green_Level,9
ConfigGroup, Illumination,mCherry  9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry  9%,SpectraX,State,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry  9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry  9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry  9%,Core,Shutter,SpectraX
ConfigGroup, Illumination,mCherry  9%,Core,AutoShutter,1

# Preset: YFP 49%
ConfigGroup, Illumination,YFP 49%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,YFP 49%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,YFP 49%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Green_Level,100
ConfigGroup, Illumination,YFP 49%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Red_Level,100
ConfigGroup, Illumination,YFP 49%,SpectraX,State,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Teal_Enable,1
ConfigGroup, Illumination,YFP 49%,SpectraX,Teal_Level,49
ConfigGroup, Illumination,YFP 49%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,YFP 49%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,YFP 49%,Core,AutoShutter,1
ConfigGroup, Illumination,YFP 49%,Core,Shutter,SpectraX

# Preset: RFP 97%
ConfigGroup, Illumination,RFP 97%,TIFilterBlock1,Label,4-RFP
ConfigGroup, Illumination,RFP 97%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,RFP 97%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,RFP 97%,SpectraX,Green_Level,97
ConfigGroup, Illumination,RFP 97%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Red_Level,100
ConfigGroup, Illumination,RFP 97%,SpectraX,State,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,RFP 97%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,RFP 97%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,RFP 97%,Core,AutoShutter,1
ConfigGroup, Illumination,RFP 97%,Core,Shutter,SpectraX

# Preset: YFP 97%
ConfigGroup, Illumination,YFP 97%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,YFP 97%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,YFP 97%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Green_Level,100
ConfigGroup, Illumination,YFP 97%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Red_Level,100
ConfigGroup, Illumination,YFP 97%,SpectraX,State,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Teal_Enable,1
ConfigGroup, Illumination,YFP 97%,SpectraX,Teal_Level,97
ConfigGroup, Illumination,YFP 97%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,YFP 97%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,YFP 97%,Core,AutoShutter,1
ConfigGroup, Illumination,YFP 97%,Core,Shutter,SpectraX

# Preset: mCherry 97%
ConfigGroup, Illumination,mCherry 97%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry 97%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry 97%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry 97%,SpectraX,Green_Level,97
ConfigGroup, Illumination,mCherry 97%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry 97%,SpectraX,State,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry 97%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry 97%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry 97%,Core,AutoShutter,1
ConfigGroup, Illumination,mCherry 97%,Core,Shutter,SpectraX

# Preset: GFP  5%
ConfigGroup, Illumination,GFP  5%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP  5%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP  5%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP  5%,SpectraX,Cyan_Level,5
ConfigGroup, Illumination,GFP  5%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP  5%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP  5%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP  5%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP  5%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP  5%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP  5%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP  5%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP  5%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP  5%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,GFP  5%,SpectraX,State,0
ConfigGroup, Illumination,GFP  5%,Core,AutoShutter,1

# Preset: CFP 47%
ConfigGroup, Illumination,CFP 47%,TIFilterBlock1,Label,2-CFP
ConfigGroup, Illumination,CFP 47%,SpectraX,Blue_Enable,1
ConfigGroup, Illumination,CFP 47%,SpectraX,Blue_Level,47
ConfigGroup, Illumination,CFP 47%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Green_Level,100
ConfigGroup, Illumination,CFP 47%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Red_Level,100
ConfigGroup, Illumination,CFP 47%,SpectraX,State,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,CFP 47%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,CFP 47%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,CFP 47%,Core,AutoShutter,1
ConfigGroup, Illumination,CFP 47%,Core,Shutter,SpectraX

# Preset: GFP 17%
ConfigGroup, Illumination,GFP 17%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,GFP 17%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP 17%,SpectraX,Cyan_Level,17
ConfigGroup, Illumination,GFP 17%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,State,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP 17%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP 17%,Core,AutoShutter,1

# Preset: DAPI  9%
ConfigGroup, Illumination,DAPI  9%,TIFilterBlock1,Label,2-CFP
ConfigGroup, Illumination,DAPI  9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,DAPI  9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Green_Level,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,DAPI  9%,SpectraX,State,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,DAPI  9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,DAPI  9%,SpectraX,Violet_Enable,1
ConfigGroup, Illumination,DAPI  9%,SpectraX,Violet_Level,9
ConfigGroup, Illumination,DAPI  9%,Core,Shutter,SpectraX
ConfigGroup, Illumination,DAPI  9%,Core,AutoShutter,1

# Preset: YFP 33%
ConfigGroup, Illumination,YFP 33%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,YFP 33%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,YFP 33%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Green_Level,100
ConfigGroup, Illumination,YFP 33%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Red_Level,100
ConfigGroup, Illumination,YFP 33%,SpectraX,State,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Teal_Enable,1
ConfigGroup, Illumination,YFP 33%,SpectraX,Teal_Level,33
ConfigGroup, Illumination,YFP 33%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,YFP 33%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,YFP 33%,Core,AutoShutter,1
ConfigGroup, Illumination,YFP 33%,Core,Shutter,SpectraX

# Preset: GFP  3%
ConfigGroup, Illumination,GFP  3%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,GFP  3%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP  3%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP  3%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP  3%,SpectraX,Cyan_Level,3
ConfigGroup, Illumination,GFP  3%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP  3%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP  3%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP  3%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP  3%,SpectraX,State,0
ConfigGroup, Illumination,GFP  3%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP  3%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP  3%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP  3%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP  3%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP  3%,Core,AutoShutter,1

# Preset: GFP  9%
ConfigGroup, Illumination,GFP  9%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,GFP  9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP  9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP  9%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP  9%,SpectraX,Cyan_Level,9
ConfigGroup, Illumination,GFP  9%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP  9%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP  9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP  9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP  9%,SpectraX,State,0
ConfigGroup, Illumination,GFP  9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP  9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP  9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP  9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP  9%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP  9%,Core,AutoShutter,1

# Preset: CFP 17%
ConfigGroup, Illumination,CFP 17%,TIFilterBlock1,Label,2-CFP
ConfigGroup, Illumination,CFP 17%,SpectraX,Blue_Enable,1
ConfigGroup, Illumination,CFP 17%,SpectraX,Blue_Level,17
ConfigGroup, Illumination,CFP 17%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Green_Level,100
ConfigGroup, Illumination,CFP 17%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Red_Level,100
ConfigGroup, Illumination,CFP 17%,SpectraX,State,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,CFP 17%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,CFP 17%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,CFP 17%,Core,AutoShutter,1
ConfigGroup, Illumination,CFP 17%,Core,Shutter,SpectraX

# Preset: mCherry  5%
ConfigGroup, Illumination,mCherry  5%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry  5%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry  5%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry  5%,SpectraX,Green_Level,5
ConfigGroup, Illumination,mCherry  5%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry  5%,SpectraX,State,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry  5%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry  5%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry  5%,Core,Shutter,SpectraX
ConfigGroup, Illumination,mCherry  5%,Core,AutoShutter,1

# Preset:  DIA
ConfigGroup, Illumination, DIA,SpectraX,Blue_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Blue_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Cyan_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Green_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Green_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Red_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Red_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Teal_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Teal_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Violet_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Violet_Level,100
ConfigGroup, Illumination, DIA,Core,Shutter,Arduino (DIA)
ConfigGroup, Illumination, DIA,TIFilterBlock1,Label,1------
ConfigGroup, Illumination, DIA,SpectraX,State,0
ConfigGroup, Illumination, DIA,Core,AutoShutter,1

# Preset: YFP 17%
ConfigGroup, Illumination,YFP 17%,TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination,YFP 17%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,YFP 17%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Green_Level,100
ConfigGroup, Illumination,YFP 17%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Red_Level,100
ConfigGroup, Illumination,YFP 17%,SpectraX,State,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Teal_Enable,1
ConfigGroup, Illumination,YFP 17%,SpectraX,Teal_Level,17
ConfigGroup, Illumination,YFP 17%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,YFP 17%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,YFP 17%,Core,AutoShutter,1
ConfigGroup, Illumination,YFP 17%,Core,Shutter,SpectraX

# Preset: mCherry 17%
ConfigGroup, Illumination,mCherry 17%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry 17%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry 17%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry 17%,SpectraX,Green_Level,17
ConfigGroup, Illumination,mCherry 17%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry 17%,SpectraX,State,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry 17%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry 17%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry 17%,Core,AutoShutter,1
ConfigGroup, Illumination,mCherry 17%,Core,Shutter,SpectraX

# Preset: Cy5.5 49%
ConfigGroup, Illumination,Cy5.5 49%,TIFilterBlock1,Label,6-Cy55
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Cyan_Level,100
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Green_Level,100
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Red_Enable,1
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Red_Level,49
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,State,0
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,Cy5.5 49%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,Cy5.5 49%,Core,AutoShutter,1
ConfigGroup, Illumination,Cy5.5 49%,Core,Shutter,SpectraX

# Preset:  DIA (GFP)
ConfigGroup, Illumination, DIA (GFP),TIFilterBlock1,Label,3-GFP
ConfigGroup, Illumination, DIA (GFP),SpectraX,Blue_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Blue_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Cyan_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Cyan_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Green_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Green_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Red_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Red_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Teal_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Teal_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Violet_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Violet_Level,100
ConfigGroup, Illumination, DIA (GFP),Core,Shutter,Arduino (DIA)
ConfigGroup, Illumination, DIA (GFP),SpectraX,State,0
ConfigGroup, Illumination, DIA (GFP),Core,AutoShutter,1


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Hamamatsu_DCAM,Sensor Cooler,ON
ConfigGroup,System,Startup,ArduinoDIA-Switch,State,33
ConfigGroup,System,Startup,Core,ChannelGroup, Illumination


# Group: Camera DefectCorrect
# Preset: ON
ConfigGroup,Camera DefectCorrect,ON,Hamamatsu_DCAM,DEFECT CORRECT MODE,ON

# Preset: OFF
ConfigGroup,Camera DefectCorrect,OFF,Hamamatsu_DCAM,DEFECT CORRECT MODE,OFF


# Group: Emission Filter
# Preset: 2-CFP
ConfigGroup,Emission Filter,2-CFP,TIFilterBlock1,Label,2-CFP

# Preset: 3-GFP
ConfigGroup,Emission Filter,3-GFP,TIFilterBlock1,Label,3-GFP

# Preset: 6-Cy55
ConfigGroup,Emission Filter,6-Cy55,TIFilterBlock1,Label,6-Cy55

# Preset: 5-mChe
ConfigGroup,Emission Filter,5-mChe,TIFilterBlock1,Label,5-mChe

# Preset: 1------
ConfigGroup,Emission Filter,1------,TIFilterBlock1,Label,1------

# Preset: 4-RFP
ConfigGroup,Emission Filter,4-RFP,TIFilterBlock1,Label,4-RFP


# Group: Light Path
# Preset: 2-Left100
ConfigGroup,Light Path,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,Light Path,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,Light Path,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,Light Path,4-Left80,TILightPath,Label,4-Left80


# Group: PFS State
# Preset: On
ConfigGroup,PFS State,On,TIPFSStatus,State,On

# Preset: Off
ConfigGroup,PFS State,Off,TIPFSStatus,State,Off


# Group:  Objective
# Preset: 60x
ConfigGroup, Objective,60x,TINosePiece,Label,3-Plan Apo 60x NA 1.40 Oil
ConfigGroup, Objective,60x,TICondenserCassette,Label,2-Ph1

# Preset: 100x
ConfigGroup, Objective,100x,TINosePiece,Label,2-Plan Apo 100x NA 1.45 Oil
ConfigGroup, Objective,100x,TICondenserCassette,Label,3-Ph3

# Preset: 10x
ConfigGroup, Objective,10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup, Objective,10x,TICondenserCassette,Label,2-Ph1


# Group: Condenser
# Preset: 2-Ph1
ConfigGroup,Condenser,2-Ph1,TICondenserCassette,Label,2-Ph1

# Preset: 1------
ConfigGroup,Condenser,1------,TICondenserCassette,Label,1------

# Preset: 5------
ConfigGroup,Condenser,5------,TICondenserCassette,Label,5------

# Preset: 3-Ph3
ConfigGroup,Condenser,3-Ph3,TICondenserCassette,Label,3-Ph3

# Preset: 4-MC1
ConfigGroup,Condenser,4-MC1,TICondenserCassette,Label,4-MC1



# PixelSize settings
# Resolution preset: 60x
ConfigPixelSize,60x,TINosePiece,Label,3-Plan Apo 60x NA 1.40 Oil
PixelSize_um,60x,0.1072

# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,2-Plan Apo 100x NA 1.45 Oil
PixelSize_um,100x,0.065

# Resolution preset: 10x
ConfigPixelSize,10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,10x,0.6533


