# Generated by Configurator on Tue Feb 28 11:47:10 CET 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1 
Device,NikonTi,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,SpectraX,LumencorSpectra,Spectra
Device,Hamamatsu_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input
Device,TIDiaLamp,NikonTI,TIDiaLamp
Device,MCL Z Piezo,MCL_NanoDrive,MCL NanoDrive Z Stage

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,0
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,SpectraX,Port,COM1
Property,SpectraX,SetLE_Type,SpectraX
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM5
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,NikonTi
Parent,TICondenserCassette,NikonTi
Parent,TIFilterBlock1,NikonTi
Parent,TILightPath,NikonTi
Parent,TIZDrive,NikonTi
Parent,TIXYDrive,NikonTi
Parent,TIPFSOffset,NikonTi
Parent,TIPFSStatus,NikonTi
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub
Parent,TIDiaLamp,NikonTi

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,250.0
Delay,TICondenserCassette,250.0
Delay,TIFilterBlock1,250.0
Delay,TILightPath,250.0
Delay,TIDiaLamp,250.0

# Focus directions

# Roles
Property,Core,Camera,Hamamatsu_DCAM
Property,Core,Shutter,Arduino
Property,Core,Focus,MCL Z Piezo
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Unknown
Label,TINosePiece,2,3-Unknown
Label,TINosePiece,1,2-Unknown
Label,TINosePiece,0,1-Plan Apo 100x NA 1.45 Oil
# TICondenserCassette
Label,TICondenserCassette,4,5------
Label,TICondenserCassette,3,4------
Label,TICondenserCassette,2,3-Ph3
Label,TICondenserCassette,1,2------
Label,TICondenserCassette,0,1------
# TIFilterBlock1
Label,TIFilterBlock1,5,6-C/Y/m
Label,TIFilterBlock1,4,5-G/m
Label,TIFilterBlock1,3,4------
Label,TIFilterBlock1,2,3------
Label,TIFilterBlock1,1,2------
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,DIA
Label,Arduino-Switch,6,Red
Label,Arduino-Switch,5,Green
Label,Arduino-Switch,4,Teal
Label,Arduino-Switch,3,Cyan
Label,Arduino-Switch,2,Blue
Label,Arduino-Switch,1,Violet
Label,Arduino-Switch,0,0

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER PERIOD UNITS,MILLISECONDS
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER PERIOD[1],1.0000
ConfigGroup,System,Startup,Arduino-Switch,State,7
ConfigGroup,System,Startup,Core,ChannelGroup,  Channel
ConfigGroup,System,Startup,SpectraX,Blue_Level,5
ConfigGroup,System,Startup,SpectraX,Cyan_Level,5
ConfigGroup,System,Startup,SpectraX,Green_Level,5
ConfigGroup,System,Startup,SpectraX,Red_Level,5
ConfigGroup,System,Startup,SpectraX,Teal_Level,5
ConfigGroup,System,Startup,SpectraX,Violet_Level,5
ConfigGroup,System,Startup,Hamamatsu_DCAM,TransposeMirrorX,0
ConfigGroup,System,Startup,Hamamatsu_DCAM,TransposeMirrorY,1
ConfigGroup,System,Startup,Hamamatsu_DCAM,TransposeXY,1
ConfigGroup,System,Startup,Hamamatsu_DCAM,Exposure,20.0050
ConfigGroup,System,Startup,TIXYDrive,TransposeMirrorX,1
ConfigGroup,System,Startup,TIXYDrive,TransposeMirrorY,0
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,Core,Shutter,Arduino
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER KIND[1],PROGRAMABLE
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,System,Startup,Hamamatsu_DCAM,OUTPUT TRIGGER SOURCE[1],VSYNC
ConfigGroup,System,Startup,Arduino-Switch,Sequence,On
ConfigGroup,System,Startup,MCL Z Piezo,Use Sequence,Yes
ConfigGroup,System,Startup,Core,Focus,MCL Z Piezo
ConfigGroup,System,Startup,TIDiaLamp,ComputerControl,On
ConfigGroup,System,Startup,TIDiaLamp,Intensity,24
ConfigGroup,System,Startup,TIDiaLamp,State,1
ConfigGroup,System,Startup,MCL Z Piezo,Set position Z (um),12.5000
ConfigGroup,System,Startup,MCL Z Piezo,Shift sequence by 1,Yes

# Preset: Shutdown
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER PERIOD UNITS,MILLISECONDS
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER PERIOD[1],1.0000
ConfigGroup,System,Shutdown,TIXYDrive,TransposeMirrorX,1
ConfigGroup,System,Shutdown,TIXYDrive,TransposeMirrorY,0
ConfigGroup,System,Shutdown,SpectraX,Blue_Level,5
ConfigGroup,System,Shutdown,SpectraX,Cyan_Level,5
ConfigGroup,System,Shutdown,SpectraX,Green_Level,5
ConfigGroup,System,Shutdown,SpectraX,Red_Level,5
ConfigGroup,System,Shutdown,SpectraX,Teal_Level,5
ConfigGroup,System,Shutdown,SpectraX,Violet_Level,5
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,Exposure,20.0050
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER KIND[1],PROGRAMABLE
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,OUTPUT TRIGGER SOURCE[1],VSYNC
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,TransposeMirrorX,0
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,TransposeMirrorY,1
ConfigGroup,System,Shutdown,Hamamatsu_DCAM,TransposeXY,1
ConfigGroup,System,Shutdown,Arduino-Switch,Sequence,On
ConfigGroup,System,Shutdown,Arduino-Switch,State,7
ConfigGroup,System,Shutdown,TIDiaLamp,ComputerControl,On
ConfigGroup,System,Shutdown,TIDiaLamp,Intensity,24
ConfigGroup,System,Shutdown,TIDiaLamp,State,1
ConfigGroup,System,Shutdown,MCL Z Piezo,Set position Z (um),0.0000
ConfigGroup,System,Shutdown,MCL Z Piezo,Use Sequence,Yes
ConfigGroup,System,Shutdown,Core,ChannelGroup,  Channel
ConfigGroup,System,Shutdown,Core,Focus,MCL Z Piezo
ConfigGroup,System,Shutdown,Core,Shutter,Arduino
ConfigGroup,System,Shutdown,MCL Z Piezo,Shift sequence by 1,No


# Group:  I_cyan (GFP)
# Preset: 49%
ConfigGroup, I_cyan (GFP),49%,SpectraX,Cyan_Level,49

# Preset:  3%
ConfigGroup, I_cyan (GFP), 3%,SpectraX,Cyan_Level,3

# Preset: 33%
ConfigGroup, I_cyan (GFP),33%,SpectraX,Cyan_Level,33

# Preset:  9%
ConfigGroup, I_cyan (GFP), 9%,SpectraX,Cyan_Level,9

# Preset:  5%
ConfigGroup, I_cyan (GFP), 5%,SpectraX,Cyan_Level,5

# Preset: 17%
ConfigGroup, I_cyan (GFP),17%,SpectraX,Cyan_Level,17

# Preset: 97%
ConfigGroup, I_cyan (GFP),97%,SpectraX,Cyan_Level,97


# Group: Arduino blanking
# Preset: ON
ConfigGroup,Arduino blanking,ON,Arduino-Switch,Blank On,Low
ConfigGroup,Arduino blanking,ON,Arduino-Switch,Blanking Mode,On
ConfigGroup,Arduino blanking,ON,Hamamatsu_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,Arduino blanking,ON,Hamamatsu_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Arduino blanking,ON,Hamamatsu_DCAM,OUTPUT TRIGGER DELAY[0],0.0000

# Preset: OFF
ConfigGroup,Arduino blanking,OFF,Hamamatsu_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,Arduino blanking,OFF,Hamamatsu_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Arduino blanking,OFF,Arduino-Switch,Blank On,Low
ConfigGroup,Arduino blanking,OFF,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Arduino blanking,OFF,Hamamatsu_DCAM,OUTPUT TRIGGER DELAY[0],0.0000


# Group:  I_violet (DAPI)
# Preset: 49%
ConfigGroup, I_violet (DAPI),49%,SpectraX,Violet_Level,49

# Preset:  3%
ConfigGroup, I_violet (DAPI), 3%,SpectraX,Violet_Level,3

# Preset: 33%
ConfigGroup, I_violet (DAPI),33%,SpectraX,Violet_Level,33

# Preset:  9%
ConfigGroup, I_violet (DAPI), 9%,SpectraX,Violet_Level,9

# Preset:  5%
ConfigGroup, I_violet (DAPI), 5%,SpectraX,Violet_Level,5

# Preset: 17%
ConfigGroup, I_violet (DAPI),17%,SpectraX,Violet_Level,17

# Preset: 97%
ConfigGroup, I_violet (DAPI),97%,SpectraX,Violet_Level,97


# Group:  I_red (Cy5.5)
# Preset: 49%
ConfigGroup, I_red (Cy5.5),49%,SpectraX,Red_Level,49

# Preset:  3%
ConfigGroup, I_red (Cy5.5), 3%,SpectraX,Red_Level,3

# Preset: 33%
ConfigGroup, I_red (Cy5.5),33%,SpectraX,Red_Level,33

# Preset:  9%
ConfigGroup, I_red (Cy5.5), 9%,SpectraX,Red_Level,9

# Preset:  5%
ConfigGroup, I_red (Cy5.5), 5%,SpectraX,Red_Level,5

# Preset: 17%
ConfigGroup, I_red (Cy5.5),17%,SpectraX,Red_Level,17

# Preset: 97%
ConfigGroup, I_red (Cy5.5),97%,SpectraX,Red_Level,97


# Group:  I_green (RFP/mCherry)
# Preset: 49%
ConfigGroup, I_green (RFP/mCherry),49%,SpectraX,Green_Level,49

# Preset:  3%
ConfigGroup, I_green (RFP/mCherry), 3%,SpectraX,Green_Level,3

# Preset: 33%
ConfigGroup, I_green (RFP/mCherry),33%,SpectraX,Green_Level,33

# Preset:  9%
ConfigGroup, I_green (RFP/mCherry), 9%,SpectraX,Green_Level,9

# Preset:  5%
ConfigGroup, I_green (RFP/mCherry), 5%,SpectraX,Green_Level,5

# Preset: 17%
ConfigGroup, I_green (RFP/mCherry),17%,SpectraX,Green_Level,17

# Preset: 97%
ConfigGroup, I_green (RFP/mCherry),97%,SpectraX,Green_Level,97


# Group:  I_teal (YFP)
# Preset: 49%
ConfigGroup, I_teal (YFP),49%,SpectraX,Teal_Level,49

# Preset:  3%
ConfigGroup, I_teal (YFP), 3%,SpectraX,Teal_Level,3

# Preset: 33%
ConfigGroup, I_teal (YFP),33%,SpectraX,Teal_Level,33

# Preset:  9%
ConfigGroup, I_teal (YFP), 9%,SpectraX,Teal_Level,9

# Preset:  5%
ConfigGroup, I_teal (YFP), 5%,SpectraX,Teal_Level,5

# Preset: 17%
ConfigGroup, I_teal (YFP),17%,SpectraX,Teal_Level,17

# Preset: 97%
ConfigGroup, I_teal (YFP),97%,SpectraX,Teal_Level,97


# Group:  Piezo position (um)
# Preset: NewPreset
ConfigGroup, Piezo position (um),NewPreset,MCL Z Piezo,Set position Z (um),12.6058


# Group:   Channel
# Preset: mCherry (Tri)
ConfigGroup,  Channel,mCherry (Tri),TIFilterBlock1,Label,6-C/Y/m
ConfigGroup,  Channel,mCherry (Tri),Core,Shutter,Arduino
ConfigGroup,  Channel,mCherry (Tri),Core,AutoShutter,1
ConfigGroup,  Channel,mCherry (Tri),Arduino-Switch,Label,Green
ConfigGroup,  Channel,mCherry (Tri),TICondenserCassette,Label,3-Ph3

# Preset: mCherry (Dual)
ConfigGroup,  Channel,mCherry (Dual),TICondenserCassette,Label,3-Ph3
ConfigGroup,  Channel,mCherry (Dual),TIFilterBlock1,Label,5-G/m
ConfigGroup,  Channel,mCherry (Dual),Arduino-Switch,Label,Green
ConfigGroup,  Channel,mCherry (Dual),Core,AutoShutter,1
ConfigGroup,  Channel,mCherry (Dual),Core,Shutter,Arduino

# Preset: YFP (Tri)
ConfigGroup,  Channel,YFP (Tri),TIFilterBlock1,Label,6-C/Y/m
ConfigGroup,  Channel,YFP (Tri),Core,AutoShutter,1
ConfigGroup,  Channel,YFP (Tri),Core,Shutter,Arduino
ConfigGroup,  Channel,YFP (Tri),Arduino-Switch,Label,Teal
ConfigGroup,  Channel,YFP (Tri),TICondenserCassette,Label,3-Ph3

# Preset:  DIA Ph3 (Tri)
ConfigGroup,  Channel, DIA Ph3 (Tri),TICondenserCassette,Label,3-Ph3
ConfigGroup,  Channel, DIA Ph3 (Tri),TIFilterBlock1,Label,6-C/Y/m
ConfigGroup,  Channel, DIA Ph3 (Tri),Arduino-Switch,Label,DIA
ConfigGroup,  Channel, DIA Ph3 (Tri),Core,AutoShutter,1
ConfigGroup,  Channel, DIA Ph3 (Tri),Core,Shutter,Arduino

# Preset: DAPI
ConfigGroup,  Channel,DAPI,TIFilterBlock1,Label,1------
ConfigGroup,  Channel,DAPI,Core,Shutter,Arduino
ConfigGroup,  Channel,DAPI,Core,AutoShutter,1
ConfigGroup,  Channel,DAPI,Arduino-Switch,Label,Violet
ConfigGroup,  Channel,DAPI,TICondenserCassette,Label,3-Ph3

# Preset:  DIA Ph3 (Dual)
ConfigGroup,  Channel, DIA Ph3 (Dual),TICondenserCassette,Label,3-Ph3
ConfigGroup,  Channel, DIA Ph3 (Dual),TIFilterBlock1,Label,5-G/m
ConfigGroup,  Channel, DIA Ph3 (Dual),Arduino-Switch,Label,DIA
ConfigGroup,  Channel, DIA Ph3 (Dual),Core,AutoShutter,1
ConfigGroup,  Channel, DIA Ph3 (Dual),Core,Shutter,Arduino

# Preset: CFP (Tri)
ConfigGroup,  Channel,CFP (Tri),TIFilterBlock1,Label,6-C/Y/m
ConfigGroup,  Channel,CFP (Tri),Core,AutoShutter,1
ConfigGroup,  Channel,CFP (Tri),Core,Shutter,Arduino
ConfigGroup,  Channel,CFP (Tri),Arduino-Switch,Label,Blue
ConfigGroup,  Channel,CFP (Tri),TICondenserCassette,Label,3-Ph3

# Preset: DIA
ConfigGroup,  Channel,DIA,TICondenserCassette,Label,1------
ConfigGroup,  Channel,DIA,TIFilterBlock1,Label,1------
ConfigGroup,  Channel,DIA,Arduino-Switch,Label,DIA
ConfigGroup,  Channel,DIA,Core,AutoShutter,1
ConfigGroup,  Channel,DIA,Core,Shutter,Arduino

# Preset:  DIA Ph3
ConfigGroup,  Channel, DIA Ph3,Core,Shutter,Arduino
ConfigGroup,  Channel, DIA Ph3,TIFilterBlock1,Label,1------
ConfigGroup,  Channel, DIA Ph3,Core,AutoShutter,1
ConfigGroup,  Channel, DIA Ph3,Arduino-Switch,Label,DIA
ConfigGroup,  Channel, DIA Ph3,TICondenserCassette,Label,3-Ph3

# Preset: DIA (Dual)
ConfigGroup,  Channel,DIA (Dual),TICondenserCassette,Label,1------
ConfigGroup,  Channel,DIA (Dual),TIFilterBlock1,Label,5-G/m
ConfigGroup,  Channel,DIA (Dual),Arduino-Switch,Label,DIA
ConfigGroup,  Channel,DIA (Dual),Core,AutoShutter,1
ConfigGroup,  Channel,DIA (Dual),Core,Shutter,Arduino

# Preset: Cy5.5
ConfigGroup,  Channel,Cy5.5,TIFilterBlock1,Label,4------
ConfigGroup,  Channel,Cy5.5,Core,AutoShutter,1
ConfigGroup,  Channel,Cy5.5,Core,Shutter,Arduino
ConfigGroup,  Channel,Cy5.5,Arduino-Switch,Label,Red
ConfigGroup,  Channel,Cy5.5,TICondenserCassette,Label,3-Ph3

# Preset: RFP
ConfigGroup,  Channel,RFP,TIFilterBlock1,Label,3------
ConfigGroup,  Channel,RFP,Core,AutoShutter,1
ConfigGroup,  Channel,RFP,Core,Shutter,Arduino
ConfigGroup,  Channel,RFP,Arduino-Switch,Label,Green
ConfigGroup,  Channel,RFP,TICondenserCassette,Label,1------

# Preset: GFP (Dual)
ConfigGroup,  Channel,GFP (Dual),TICondenserCassette,Label,3-Ph3
ConfigGroup,  Channel,GFP (Dual),TIFilterBlock1,Label,5-G/m
ConfigGroup,  Channel,GFP (Dual),Arduino-Switch,Label,Cyan
ConfigGroup,  Channel,GFP (Dual),Core,AutoShutter,1
ConfigGroup,  Channel,GFP (Dual),Core,Shutter,Arduino


# Group: PFS Offset
# Preset: NewPreset
ConfigGroup,PFS Offset,NewPreset,TIPFSOffset,Position,164.5250


# Group:  I_blue (CFP)
# Preset: 49%
ConfigGroup, I_blue (CFP),49%,SpectraX,Blue_Level,49

# Preset:  3%
ConfigGroup, I_blue (CFP), 3%,SpectraX,Blue_Level,3

# Preset: 33%
ConfigGroup, I_blue (CFP),33%,SpectraX,Blue_Level,33

# Preset:  9%
ConfigGroup, I_blue (CFP), 9%,SpectraX,Blue_Level,9

# Preset:  5%
ConfigGroup, I_blue (CFP), 5%,SpectraX,Blue_Level,5

# Preset: 17%
ConfigGroup, I_blue (CFP),17%,SpectraX,Blue_Level,17

# Preset: 97%
ConfigGroup, I_blue (CFP),97%,SpectraX,Blue_Level,97


# Group: Condenser
# Preset: 2-Ph1
ConfigGroup,Condenser,2-Ph1,TICondenserCassette,Label,2------

# Preset: 1------
ConfigGroup,Condenser,1------,TICondenserCassette,Label,1------

# Preset: 5------
ConfigGroup,Condenser,5------,TICondenserCassette,Label,5------

# Preset: 3-Ph3
ConfigGroup,Condenser,3-Ph3,TICondenserCassette,Label,3-Ph3

# Preset: 4-MC1
ConfigGroup,Condenser,4-MC1,TICondenserCassette,Label,4------


# Group: PFS State
# Preset: On
ConfigGroup,PFS State,On,TIPFSStatus,State,On

# Preset: Off
ConfigGroup,PFS State,Off,TIPFSStatus,State,Off


# Group: Light Path
# Preset: 2-Left100
ConfigGroup,Light Path,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,Light Path,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,Light Path,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,Light Path,4-Left80,TILightPath,Label,4-Left80


# Group: Emission Filter
# Preset: 5-G-m
ConfigGroup,Emission Filter,5-G-m,TIFilterBlock1,Label,5-G/m

# Preset: 3-RFP
ConfigGroup,Emission Filter,3-RFP,TIFilterBlock1,Label,3------

# Preset: 4-Cy55
ConfigGroup,Emission Filter,4-Cy55,TIFilterBlock1,Label,4------

# Preset: 1------
ConfigGroup,Emission Filter,1------,TIFilterBlock1,Label,1------

# Preset: 2-GFP
ConfigGroup,Emission Filter,2-GFP,TIFilterBlock1,Label,2------

# Preset: 6-C-Y-m
ConfigGroup,Emission Filter,6-C-Y-m,TIFilterBlock1,Label,6-C/Y/m


# Group: Camera DefectCorrect
# Preset: ON
ConfigGroup,Camera DefectCorrect,ON,Hamamatsu_DCAM,DEFECT CORRECT MODE,ON

# Preset: OFF
ConfigGroup,Camera DefectCorrect,OFF,Hamamatsu_DCAM,DEFECT CORRECT MODE,OFF


# Group:   Objective
# Preset: 60x
ConfigGroup,  Objective,60x,TINosePiece,Label,4-Unknown

# Preset: 10x
ConfigGroup,  Objective,10x,TINosePiece,Label,5-Unknown

# Preset: 100x
ConfigGroup,  Objective,100x,TINosePiece,Label,1-Plan Apo 100x NA 1.45 Oil


# Group: a2
# Preset: NewPreset
ConfigGroup,a2,NewPreset,Arduino-Input,AnalogInput2,633.0000


# Group: a1
# Preset: NewPreset
ConfigGroup,a1,NewPreset,Arduino-Input,AnalogInput1,524.0000


# Group: a0
# Preset: NewPreset
ConfigGroup,a0,NewPreset,Arduino-Input,AnalogInput0,515.0000


# Group: DIA intensity
# Preset: NewPreset
ConfigGroup,DIA intensity,NewPreset,TIDiaLamp,Intensity,0



# PixelSize settings
# Resolution preset: 60x
ConfigPixelSize,60x,TINosePiece,Label,4-Plan Apo 60x NA 1.40 Oil
PixelSize_um,60x,0.1072

# Resolution preset: 10x
ConfigPixelSize,10x,TINosePiece,Label,5-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,10x,0.6533

# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,1-Plan Apo 100x NA 1.45 Oil
PixelSize_um,100x,0.065


